<?xml version="1.0"?>
<model xmlns="http://www.cellml.org/cellml/1.1#" name="Ikeda_Respiration">
  <component name="Main">
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>XHB
        </ci>
        <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">15
        </cn>
      </apply>
      <apply>
        <eq/>
        <ci>PBA
        </ci>
        <cn>760
        </cn>
      </apply>
      <apply>
        <eq/>
        <ci>PBL
        </ci>
        <apply>
          <minus/>
          <ci>PBA
          </ci>
          <cn>47
          </cn>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>VAL
        </ci>
        <cn>3
        </cn>
      </apply>
      <apply>
        <eq/>
        <ci>MRCO
        </ci>
        <cn>0.2318
        </cn>
      </apply>
      <apply>
        <eq/>
        <ci>MRO2
        </ci>
        <cn>0.2591
        </cn>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t
            </ci>
          </bvar>
          <ci>FCOA
          </ci>
        </apply>
        <apply>
          <divide/>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci>VI
              </ci>
              <apply>
                <minus/>
                <ci>FCOI
                </ci>
                <ci>FCOA
                </ci>
              </apply>
            </apply>
            <apply>
              <times/>
              <apply>
                <divide/>
                <cn>863
                </cn>
                <apply>
                  <minus/>
                  <ci>PBA
                  </ci>
                  <cn>47
                  </cn>
                </apply>
              </apply>
              <ci>QCO
              </ci>
              <apply>
                <minus/>
                <ci>UCOV
                </ci>
                <ci>UCOA
                </ci>
              </apply>
            </apply>
          </apply>
          <ci>VAL
          </ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t
            </ci>
          </bvar>
          <ci>FO2A
          </ci>
        </apply>
        <apply>
          <divide/>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci>VI
              </ci>
              <apply>
                <minus/>
                <ci>FO2I
                </ci>
                <ci>FO2A
                </ci>
              </apply>
            </apply>
            <apply>
              <times/>
              <apply>
                <divide/>
                <cn>863
                </cn>
                <apply>
                  <minus/>
                  <ci>PBA
                  </ci>
                  <cn>47
                  </cn>
                </apply>
              </apply>
              <ci>QCO
              </ci>
              <apply>
                <minus/>
                <ci>UO2V
                </ci>
                <ci>UO2A
                </ci>
              </apply>
            </apply>
          </apply>
          <ci>VAL
          </ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t
            </ci>
          </bvar>
          <ci>UCOV
          </ci>
        </apply>
        <apply>
          <divide/>
          <apply>
            <plus/>
            <ci>MRCO
            </ci>
            <apply>
              <times/>
              <ci>QCO
              </ci>
              <apply>
                <minus/>
                <ci>UCOA
                </ci>
                <ci>UCOV
                </ci>
              </apply>
            </apply>
          </apply>
          <ci>VTW
          </ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t
            </ci>
          </bvar>
          <ci>UO2V
          </ci>
        </apply>
        <apply>
          <divide/>
          <apply>
            <plus/>
            <apply>
              <minus/>
              <ci>MRO2
              </ci>
            </apply>
            <apply>
              <times/>
              <ci>QCO
              </ci>
              <apply>
                <minus/>
                <ci>UO2A
                </ci>
                <ci>UO2V
                </ci>
              </apply>
            </apply>
          </apply>
          <ci>VTW
          </ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>UCOA
        </ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <cn>0.0006732
            </cn>
            <ci>PCOA
            </ci>
          </apply>
          <apply>
            <times/>
            <cn>0.02226
            </cn>
            <ci>XCO3
            </ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>UO2A
        </ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <cn>0.00003168
            </cn>
            <ci>PO2A
            </ci>
          </apply>
          <ci>UHBO
          </ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t
            </ci>
          </bvar>
          <ci>VI
          </ci>
        </apply>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <apply>
              <times/>
              <ci>VR
              </ci>
              <ci>VI0
              </ci>
            </apply>
            <ci>VI
            </ci>
          </apply>
          <ci>TRSP1
          </ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>k1
        </ci>
        <piecewise>
          <piece>
            <cn>0.22
            </cn>
            <apply>
              <leq/>
              <ci>PHA
              </ci>
              <cn>7.4
              </cn>
            </apply>
          </piece>
          <otherwise>
            <cn>0.0258
            </cn>
          </otherwise>
        </piecewise>
      </apply>
      <apply>
        <eq/>
        <ci>k6
        </ci>
        <piecewise>
          <piece>
            <apply>
              <minus/>
              <cn>12.734
              </cn>
            </apply>
            <apply>
              <leq/>
              <ci>PHA
              </ci>
              <cn>7.4
              </cn>
            </apply>
          </piece>
          <otherwise>
            <apply>
              <minus/>
              <cn>5.003
              </cn>
            </apply>
          </otherwise>
        </piecewise>
      </apply>
      <apply>
        <eq/>
        <ci>k3
        </ci>
        <cn>0.58
        </cn>
      </apply>
      <apply>
        <eq/>
        <ci>k4
        </ci>
        <cn>3.496
        </cn>
      </apply>
      <apply>
        <eq/>
        <ci>k2
        </ci>
        <piecewise>
          <piece>
            <cn>1
            </cn>
            <apply>
              <gt/>
              <ci>PCOA
              </ci>
              <cn>40
              </cn>
            </apply>
          </piece>
          <otherwise>
            <cn>0.0396
            </cn>
          </otherwise>
        </piecewise>
      </apply>
      <apply>
        <eq/>
        <ci>k5
        </ci>
        <piecewise>
          <piece>
            <apply>
              <minus/>
              <cn>32.079999999999998
              </cn>
            </apply>
            <apply>
              <gt/>
              <ci>PCOA
              </ci>
              <cn>40
              </cn>
            </apply>
          </piece>
          <otherwise>
            <cn>160.110000000000014
            </cn>
          </otherwise>
        </piecewise>
      </apply>
      <apply>
        <eq/>
        <ci>VR
        </ci>
        <apply>
          <max/>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci>k1
              </ci>
              <ci>H
              </ci>
            </apply>
            <apply>
              <times/>
              <ci>k2
              </ci>
              <apply>
                <plus/>
                <ci>k3
                </ci>
                <apply>
                  <divide/>
                  <ci>k4
                  </ci>
                  <apply>
                    <minus/>
                    <ci>PO2A
                    </ci>
                    <cn>32
                    </cn>
                  </apply>
                </apply>
              </apply>
              <apply>
                <plus/>
                <ci>PCOA
                </ci>
                <ci>k5
                </ci>
              </apply>
            </apply>
            <ci>k6
            </ci>
          </apply>
          <cn>0
          </cn>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>VI0
        </ci>
        <cn>5
        </cn>
      </apply>
      <apply>
        <eq/>
        <ci>H
        </ci>
        <apply>
          <power/>
          <cn>10
          </cn>
          <apply>
            <minus/>
            <cn>9
            </cn>
            <ci>PHA
            </ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>f
        </ci>
        <apply>
          <power/>
          <apply>
            <minus/>
            <cn>1
            </cn>
            <apply>
              <exp/>
              <apply>
                <times/>
                <apply>
                  <minus/>
                  <ci>PO2A
                  </ci>
                </apply>
                <ci>g
                </ci>
              </apply>
            </apply>
          </apply>
          <cn>2
          </cn>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>g
        </ci>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <minus/>
              <apply>
                <times/>
                <cn>0.0066815
                </cn>
                <apply>
                  <power/>
                  <ci>PHA
                  </ci>
                  <cn>3
                  </cn>
                </apply>
              </apply>
              <apply>
                <times/>
                <cn>0.10098
                </cn>
                <apply>
                  <power/>
                  <ci>PHA
                  </ci>
                  <cn>2
                  </cn>
                </apply>
              </apply>
            </apply>
            <apply>
              <times/>
              <cn>0.44921
              </cn>
              <ci>PHA
              </ci>
            </apply>
          </apply>
          <cn>0.454
          </cn>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>UHBO
        </ci>
        <apply>
          <times/>
          <ci>UHB
          </ci>
          <ci>f
          </ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>DCLA
        </ci>
        <apply>
          <minus/>
          <ci>XCO3
          </ci>
          <ci>STBC
          </ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>UHB
        </ci>
        <apply>
          <divide/>
          <ci>XHB
          </ci>
          <cn>75
          </cn>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>PCOA
        </ci>
        <apply>
          <times/>
          <ci>FCOA
          </ci>
          <apply>
            <minus/>
            <ci>PBA
            </ci>
            <cn>47
            </cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>PO2A
        </ci>
        <apply>
          <times/>
          <ci>FO2A
          </ci>
          <apply>
            <minus/>
            <ci>PBA
            </ci>
            <cn>47
            </cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>PHA
        </ci>
        <apply>
          <plus/>
          <cn>6.1
          </cn>
          <apply>
            <log/>
            <apply>
              <divide/>
              <ci>XCO3
              </ci>
              <apply>
                <times/>
                <cn>0.03
                </cn>
                <ci>PCOA
                </ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>XCO0
        </ci>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <ci>STBC
            </ci>
            <apply>
              <times/>
              <apply>
                <plus/>
                <apply>
                  <times/>
                  <cn>0.527
                  </cn>
                  <ci>XHB
                  </ci>
                </apply>
                <cn>3.7
                </cn>
              </apply>
              <apply>
                <minus/>
                <ci>PHA
                </ci>
                <cn>7.4
                </cn>
              </apply>
            </apply>
          </apply>
          <apply>
            <divide/>
            <apply>
              <times/>
              <cn>0.375
              </cn>
              <apply>
                <minus/>
                <ci>UHB
                </ci>
                <ci>UHBO
                </ci>
              </apply>
            </apply>
            <cn>0.02226
            </cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t
            </ci>
          </bvar>
          <ci>XCO3
          </ci>
        </apply>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <ci>XCO0
            </ci>
            <ci>XCO3
            </ci>
          </apply>
          <ci>TRSP
          </ci>
        </apply>
      </apply>
    </math>
    <variable name="XHB         " units="dimensionless"/>
    <variable name="XHB" units="dimensionless"/>
    <variable name="PBA" units="dimensionless"/>
    <variable name="PBL" units="dimensionless"/>
    <variable name="VAL" units="dimensionless"/>
    <variable name="MRCO" units="dimensionless"/>
    <variable name="MRO2" units="dimensionless"/>
    <variable name="t" units="dimensionless"/>
    <variable name="FCOA" units="dimensionless"/>
    <variable name="FO2A" units="dimensionless"/>
    <variable name="VI" units="dimensionless"/>
    <variable name="FCOI" units="dimensionless"/>
    <variable name="FO2I" units="dimensionless"/>
    <variable name="UCOV" units="dimensionless"/>
    <variable name="QCO" units="dimensionless"/>
    <variable name="UCOA" units="dimensionless"/>
    <variable name="VTW" units="dimensionless"/>
    <variable name="UO2V" units="dimensionless"/>
    <variable name="UO2A" units="dimensionless"/>
    <variable name="VR" units="dimensionless"/>
    <variable name="VI0" units="dimensionless"/>
    <variable name="TRSP1" units="dimensionless"/>
    <variable name="k1" units="dimensionless"/>
    <variable name="PHA" units="dimensionless"/>
    <variable name="k6" units="dimensionless"/>
    <variable name="k3" units="dimensionless"/>
    <variable name="k4" units="dimensionless"/>
    <variable name="k2" units="dimensionless"/>
    <variable name="PCOA" units="dimensionless"/>
    <variable name="H" units="dimensionless"/>
    <variable name="PO2A" units="dimensionless"/>
    <variable name="f" units="dimensionless"/>
    <variable name="UHBO" units="dimensionless"/>
    <variable name="UHB" units="dimensionless"/>
    <variable name="g" units="dimensionless"/>
    <variable name="DCLA" units="dimensionless"/>
    <variable name="XCO3" units="dimensionless"/>
    <variable name="STBC" units="dimensionless"/>
    <variable name="XCO0" units="dimensionless"/>
    <variable name="TRSP" units="dimensionless"/>
    <variable name="k5" units="dimensionless"/>
  </component>
</model>